CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(.*)_TR_Pl[0-9]_(?P<timepoint>.*)hr_2017.*$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<well>.*)\\\\(fld(?P<field>.*)wv.*.tif.*$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:Green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TexasRed")
    Name to assign these images:Red
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the nuclei from the nuclear stain image. ']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
    Select the input image:Blue
    Name the primary objects to be identified:nuclei
    Typical diameter of objects, in pixel units (Min,Max):35,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:500
    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.08
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:nuclei
    Name the objects to be identified:cytoplasm
    Select the method to identify the secondary objects:Distance - N
    Select the input image:Blue
    Number of pixels by which to expand the primary objects:200
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:nuclei_nonedge
    Fill holes in identified objects?:Yes
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:Red
    Name the primary objects to be identified:parasites
    Typical diameter of objects, in pixel units (Min,Max):8,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Suppress local maxima that are closer than this minimum allowed distance:30
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:5000
    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.04
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
MeasureObjectIntensity:[module_num:8|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notes:['Measure the intensity of the nuclei against the nuclei image.']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
    Hidden:1
    Select an image to measure:Green
    Select objects to measure:nuclei_nonedge

MeasureObjectIntensity:[module_num:9|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notes:['Measure the intensity of the foci against the h2ax image.']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
    Hidden:1
    Select an image to measure:Green
    Select objects to measure:parasites

MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:parasites
    Select objects to measure:nuclei_nonedge
    Calculate the Zernike features?:No

RelateObjects:[module_num:11|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notes:['Establish a parent-child between the foci (“children”) and the nuclei (“parents”) in order to determine which foci belong to which nuclei. Then, calculate mean foci measurements for each nucleus.']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
    Parent objects:cytoplasm
    Child objects:parasites
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
ExportToSpreadsheet:[module_num:12|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notes:['Export any measurements to a comma-delimited file (.csv). The measurements made for the nuclei and foci objects will be saved to separate .csv files, in addition to the per-image .csv.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\\\\\\\shahar\\\\\\\\HFF_cellprofiler_outputs
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:26.6.18_40hr_OP
    Overwrite existing files without warning?:No
    Data to export:nuclei_nonedge
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:cytoplasm
    Combine these object measurements with those of the previous object?:Yes
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    Use the object name for the file name?:Yes
    Data to export:parasites
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
